PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = working memory
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Routines
  Routine feedback
    TextComponent text_2
      color = black
      font = Calibri
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        ¡Muchas gracias por participar!


        Para salir, pulsa "space"
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine delay_short
    PolygonComponent pos0
      fillColor [set every repeat] = [$Color0_r, $Color0_g, $Color0_b]
      lineColor [set every repeat] = [$Color0_r, $Color0_g, $Color0_b]
      lineWidth = 0.005
      nVertices = 100
      ori = 90
      pos = (0.4, 0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent pos45
      fillColor [set every repeat] = $Color45
      lineColor [set every repeat] = $Color45
      nVertices = 100
      pos = (0.25, 0.25)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent pos90
      fillColor [set every repeat] = $Color90
      lineColor [set every repeat] = $Color90
      lineWidth = 0.005
      nVertices = 100
      pos = (0, 0.4)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent pos135
      fillColor [set every repeat] = $Color135
      lineColor [set every repeat] = $Color135
      nVertices = 100
      pos = (-0.25, 0.25)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent pos180
      fillColor [set every repeat] = $Color180
      lineColor [set every repeat] = $Color180
      nVertices = 100
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent pos225
      fillColor [set every repeat] = $Color225
      lineColor [set every repeat] = $Color225
      nVertices = 100
      pos = (-0.25, -0.25)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent pos270
      fillColor [set every repeat] = $Color270
      lineColor [set every repeat] = $Color270
      nVertices = 100
      pos = (0, -0.4)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent pos315
      fillColor [set every repeat] = $Color315
      lineColor [set every repeat] = $Color315
      nVertices = 100
      pos = (0.25, -0.25)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent response
      fillColor [set every repeat] = $Cueresp
      lineColor [set every repeat] = $Cueresp
      nVertices = 100
      shape = rectangle
      size = (0.1,0.1)
      startVal [time (s)] = 7
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable = name, time
      startVal [time (s)] = 7
      timeRelativeTo = experiment
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    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = +
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  Routine delay_long
    PolygonComponent pos0_2
      fillColor [set every repeat] = $Color0
      lineColor [set every repeat] = $Color0
      lineWidth = 0.005
      nVertices = 100
      ori = 90
      pos = (0.4, 0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent pos45_2
      fillColor [set every repeat] = $Color45
      lineColor [set every repeat] = $Color45
      nVertices = 100
      pos = (0.25, 0.25)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent pos90_2
      fillColor [set every repeat] = $Color90
      lineColor [set every repeat] = $Color90
      lineWidth = 0.005
      nVertices = 100
      pos = (0, 0.4)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent pos135_2
      fillColor [set every repeat] = $Color135
      lineColor [set every repeat] = $Color135
      nVertices = 100
      pos = (-0.25, 0.25)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent pos180_2
      fillColor [set every repeat] = $Color180
      lineColor [set every repeat] = $Color180
      nVertices = 100
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent pos225_2
      fillColor [set every repeat] = $Color225
      lineColor [set every repeat] = $Color225
      nVertices = 100
      pos = (-0.25, -0.25)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent pos270_2
      fillColor [set every repeat] = $Color270
      lineColor [set every repeat] = $Color270
      nVertices = 100
      pos = (0, -0.4)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent pos315_2
      fillColor [set every repeat] = $Color315
      lineColor [set every repeat] = $Color315
      nVertices = 100
      pos = (0.25, -0.25)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent response_2
      fillColor [set every repeat] = $Cueresp
      lineColor [set every repeat] = $Cueresp
      nVertices = 100
      shape = rectangle
      size = (0.1,0.1)
      startVal [time (s)] = 14
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 14
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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  Routine Instructions
    TextComponent text_3
      color = black
      durationEstim = 10
      font = Calibri
      letterHeight = 0.04
      pos = (-0.1, 0.025)
      startVal [time (s)] = 0.0
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      text:
        ¡Bienvenido!

        En este test de working memory tendrás que memorizar la posición de los diferentes colores.

        Después de memorizarlos deberás hacer click en la posición del color que te indiquemos (el color aparecerá encima de la curz central acabado el tiempo de memorización).

        Aunque no estés seguro, arriésgate!

        El número de items a recordar así como el tiempo de memorización irán variando para hacerlo más complicado, ¡no te asustes!

        La durada total es de entre 10-15min

        Cuando lo tengas claro, pulsa  "space"para empezar.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials_short_delay2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Color0_r', -1), ('Color0_g', 1), ('Color0_b', 1), ('Color45_r', 0), ('Color45_g', 0), ('Color45_b', 0), ('Color90_r', 1), ('Color90_g', 1), ('Color90_b', 1), ('Color135_r', 0), ('Color135_g', 0), ('Color135_b', 0), ('Color180_r', 1), ('Color180_g', -1), ('Color180_b', 1), ('Color225_r', 0), ('Color225_g', 0), ('Color225_b', 0), ('Color270_r', 0), ('Color270_g', 0), ('Color270_b', 0), ('Color315_r', 0), ('Color315_g', 0), ('Color315_b', 0), ('Cueresp_r', 1), ('Cueresp_g', -1), ('Cueresp_b', 1), ('target_angle', 180), ('load', 3), ('delay', 2), ('trial', 0)]),
      OrderedDict([('Color0_r', -1), ('Color0_g', -1), ('Color0_b', 1), ('Color45_r', 1), ('Color45_g', -1), ('Color45_b', 1), ('Color90_r', 0), ('Color90_g', 0), ('Color90_b', 0), ('Color135_r', 0), ('Color135_g', 0), ('Color135_b', 0), ('Color180_r', 0), ('Color180_g', 0), ('Color180_b', 0), ('Color225_r', 0), ('Color225_g', 0), ('Color225_b', 0), ('Color270_r', 0), ('Color270_g', 0), ('Color270_b', 0), ('Color315_r', 1), ('Color315_g', 1), ('Color315_b', 1), ('Cueresp_r', 1), ('Cueresp_g', -1), ('Cueresp_b', 1), ('target_angle', 45), ('load', 3), ('delay', 2), ('trial', 1)]),
      OrderedDict([('Color0_r', -1), ('Color0_g', 1), ('Color0_b', 1), ('Color45_r', 0), ('Color45_g', 0), ('Color45_b', 0), ('Color90_r', 1), ('Color90_g', 1), ('Color90_b', 1), ('Color135_r', 0), ('Color135_g', 0), ('Color135_b', 0), ('Color180_r', 0), ('Color180_g', 0), ('Color180_b', 0), ('Color225_r', 0), ('Color225_g', 0), ('Color225_b', 0), ('Color270_r', 1), ('Color270_g', -1), ('Color270_b', -1), ('Color315_r', 0), ('Color315_g', 0), ('Color315_b', 0), ('Cueresp_r', 1), ('Cueresp_g', -1), ('Cueresp_b', -1), ('target_angle', 270), ('load', 3), ('delay', 2), ('trial', 2)]),
      OrderedDict([('Color0_r', 1), ('Color0_g', -1), ('Color0_b', 1), ('Color45_r', 0), ('Color45_g', 0), ('Color45_b', 0), ('Color90_r', 0), ('Color90_g', 0), ('Color90_b', 0), ('Color135_r', 0), ('Color135_g', 0), ('Color135_b', 0), ('Color180_r', 0), ('Color180_g', 0), ('Color180_b', 0), ('Color225_r', -1), ('Color225_g', -1), ('Color225_b', 1), ('Color270_r', 0), ('Color270_g', 0), ('Color270_b', 0), ('Color315_r', -1), ('Color315_g', 1), ('Color315_b', 1), ('Cueresp_r', -1), ('Cueresp_g', 1), ('Cueresp_b', 1), ('target_angle', 315), ('load', 3), ('delay', 2), ('trial', 3)])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
    Routine delay_short
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = trials_long_delay.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Color0', [0, 0, 0]), ('Color45', [1, 1, 1]), ('Color90', [0, 0, 0]), ('Color135', [0, 0, 0]), ('Color180', [-1, 1, 1]), ('Color225', [0, 0, 0]), ('Color270', [0, 0, 0]), ('Color315', [-1, 1, -1]), ('Cueresp', [-1, 1, -1]), ('target_angle', 315), ('load', 3), ('delay', 9), ('trial', 0)]),
      OrderedDict([('Color0', [0, 0, 0]), ('Color45', [1, 1, 1]), ('Color90', [0, 0, 0]), ('Color135', [0, 0, 0]), ('Color180', [-1, 1, -1]), ('Color225', [0, 0, 0]), ('Color270', [1, -1, -1]), ('Color315', [0, 0, 0]), ('Cueresp', [-1, 1, -1]), ('target_angle', 180), ('load', 3), ('delay', 9), ('trial', 1)]),
      OrderedDict([('Color0', [0, 0, 0]), ('Color45', [1, 1, 1]), ('Color90', [0, 0, 0]), ('Color135', [0, 0, 0]), ('Color180', [1, -1, 1]), ('Color225', [1, 1, -1]), ('Color270', [0, 0, 0]), ('Color315', [0, 0, 0]), ('Cueresp', [1, 1, -1]), ('target_angle', 225), ('load', 3), ('delay', 9), ('trial', 2)]),
      OrderedDict([('Color0', [0, 0, 0]), ('Color45', [1, 1, 1]), ('Color90', [-1, -1, 1]), ('Color135', [0, 0, 0]), ('Color180', [0, 0, 0]), ('Color225', [0, 0, 0]), ('Color270', [0, 0, 0]), ('Color315', [1, -1, 1]), ('Cueresp', [-1, -1, 1]), ('target_angle', 90), ('load', 3), ('delay', 9), ('trial', 3)])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
    Routine delay_long
  LoopTerminator trials_2
  Routine feedback
